# Detailed heterogeneous head-and-neck ImageCube phantom with explicit materials.
#
# Generated by scripts/generate_detailed_headneck_topas_phantom.py

s:Ts/G4DataDirectory = "__G4_DATA_DIR__"

s:Ph/Default/Type = "Geant4_Modular"
sv:Ph/Default/Modules = __PHYSICS_MODULES__
d:Ph/Default/CutForGamma = __CUT_GAMMA_MM__ mm
d:Ph/Default/CutForElectron = __CUT_ELECTRON_MM__ mm
d:Ph/Default/CutForPositron = __CUT_POSITRON_MM__ mm

includeFile = __MATERIALS_INCLUDE_FILE__

s:Ge/World/Material  = "G4_AIR"
d:Ge/World/HLX       = __WORLD_HLX_CM__ cm
d:Ge/World/HLY       = __WORLD_HLY_CM__ cm
d:Ge/World/HLZ       = __WORLD_HLZ_CM__ cm
b:Ge/World/Invisible = "True"

s:Ge/Patient/Type   = "TsImageCube"
s:Ge/Patient/Parent = "World"
s:Ge/Patient/InputDirectory = "__PATIENT_INPUT_DIR__"
s:Ge/Patient/InputFile = "__PATIENT_INPUT_FILE__"
s:Ge/Patient/DataType = "SHORT"
s:Ge/Patient/ImagingToMaterialConverter = "MaterialTagNumber"
i:Ge/Patient/NumberOfVoxelsX = __XBINS__
i:Ge/Patient/NumberOfVoxelsY = __YBINS__
i:Ge/Patient/NumberOfVoxelsZ = __ZBINS__
d:Ge/Patient/VoxelSizeX = __VOXEL_SIZE_X_MM__ mm
d:Ge/Patient/VoxelSizeY = __VOXEL_SIZE_Y_MM__ mm
d:Ge/Patient/VoxelSizeZ = __VOXEL_SIZE_Z_MM__ mm
iv:Ge/Patient/MaterialTagNumbers = __MATERIAL_TAG_COUNT__ __MATERIAL_TAG_VALUES__
sv:Ge/Patient/MaterialNames = __MATERIAL_TAG_COUNT__ __MATERIAL_NAME_VALUES__
d:Ge/Patient/RotX = 0.0 deg
d:Ge/Patient/RotY = 0.0 deg
d:Ge/Patient/RotZ = 0.0 deg
d:Ge/Patient/TransX = 0.0 mm
d:Ge/Patient/TransY = 0.0 mm
d:Ge/Patient/TransZ = 0.0 mm

s:Sc/Dose3D/Quantity                  = "DoseToWater"
s:Sc/Dose3D/Component                 = "Patient"
s:Sc/Dose3D/OutputType                = "CSV"
s:Sc/Dose3D/OutputFile                = "__OUTPUT_STEM__"
s:Sc/Dose3D/IfOutputFileAlreadyExists = "Overwrite"
b:Sc/Dose3D/OutputToConsole           = "False"

__SOURCE_BLOCK__

i:Ts/NumberOfThreads            = __N_THREADS__
i:Ts/Seed                       = __SEED__
i:Ts/RunVerbosity               = 0
i:Ts/ShowHistoryCountAtInterval = __SHOW_HISTORY_INTERVAL__
b:Ts/PauseBeforeQuit            = "False"
